PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = compare_lines
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent EachFrame
      Code Type = Py
      Each Frame:
        condition = 'horizontal'

        start_left_line = RotationCondition[condition][0][0]
        end_left_line = RotationCondition[condition][0][1]
        start_right_line = RotationCondition[condition][1][0]
        end_right_line = RotationCondition[condition][1][1]



        draw_line(start_left_line, end_left_line)
        draw_line(start_right_line, end_right_line)
    CodeComponent BeforeExperimentFunctions
      Code Type = Py
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      Before Experiment:
        import psychopy

        def determine_diagonal(start_coord_left_line, length, direction = 1):
            start_x = start_coord_left_line[0]
            start_y = start_coord_left_line[1]
            end_coord_left_line_x = start_x + direction * (length * cos(1.0472))
            end_coord_left_line_y = start_y - (length * sin(1.0472))

            return (end_coord_left_line_x, end_coord_left_line_y)


        def draw_line(start_coord, end_coord):

            line = psychopy.visual.Line(
            win = win,
            units='pix',
            lineColor=[-1, -1, -1]
            )

            line.start = start_coord
            line.end = end_coord
            line.draw()
    CodeComponent BeforeExperimentObjects
      Code Type = Py
      Before Experiment:
        from math import *

        '''
        Formula for calculating coordinates:
        xx = x + (d * cos(alpha))
        yy = y + (d * sin(alpha))
        '''

        length = 300
        starting_point_left_x = -100
        distance_between_lines = 200
        ## horizontal lines always zero
        starting_point_y = length / 2



        ## VERTICAL LINES
        vertical_starting_point_line1 = (starting_point_left_x, starting_point_y)
        vertical_ending_point_line1 = (starting_point_left_x, starting_point_y - length)
        vertical_starting_point_line2 = (starting_point_left_x + distance_between_lines, starting_point_y)
        vertical_ending_point_line2 = (starting_point_left_x + distance_between_lines, starting_point_y - length)

        ## HORIZONTAL LINES
        horizontal_starting_point_line1 = (starting_point_left_x - (length / 2), 0)
        horizontal_ending_point_line1 = (starting_point_left_x + (length / 2), 0)
        horizontal_starting_point_line2 = (horizontal_starting_point_line1[0] + distance_between_lines, 0)
        horizontal_ending_point_line2  = (horizontal_ending_point_line1[0] + distance_between_lines, 0)

        RotationCondition = {
        'vertical': [[vertical_starting_point_line1, vertical_ending_point_line1],
        [vertical_starting_point_line2, vertical_ending_point_line2]],

        'horizontal': [[horizontal_starting_point_line1, horizontal_ending_point_line1],
        [horizontal_starting_point_line2, horizontal_ending_point_line2]],

        'diagonal1': [[(-200, 50), determine_diagonal((-200, 50), length)], [(200, 50), determine_diagonal((200, 50), length)]],
        'diagonal2': [[(-200, 50), determine_diagonal((-200, 50), length, direction = -1)], [(200, 50), determine_diagonal((200, 50), length, direction = -1)]]
        }
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
