PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual-search_exp1
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Routines
  Routine trial1
    CodeComponent FrameCode
      Code Type = Py
      Before Experiment:
        point_dictionary = {
        'top_left': '[line_start[0], line_start[1] - self.edge_length]',
        'bottom_left': '[line_start[0] + self.edge_length * cos(120), line_start[1] - self.edge_length * sin(120)]',
        'bottom': '[line_start[0] + self.edge_length * cos(120), line_start[1] + self.edge_length * sin(120)]',
        'bottom_right': '[line_start[0], line_start[1] + self.edge_length]',
        'top_right': '[line_start[0] - self.edge_length * cos(120), line_start[1] + self.edge_length * sin(120)]',
        'top': '[line_start[0] - self.edge_length * cos(120), line_start[1] - self.edge_length * sin(120)]'
        }


        class DrawHexGrid:

            def __init__(self, top_left_origin, edge_length = 25, x_count = 6, y_count = 6):
                self.top_left_origin = top_left_origin
                self.edge_length = edge_length
                self. x_count = x_count
                self.y_count = y_count

            def draw_top_left(self):
                line_start = self.top_left_origin
                for position in point_dictionary:
                    line = self.define_line_type()
                    line.start = line_start
                    line.end = eval(point_dictionary[position])
                    line_start = line.end
                    line.draw()

            def define_line_type(self):
                return psychopy.visual.Line(
                    win = win,
                    units='pix',
                    lineColor=[-1, -1, -1]
                    )
      Begin Routine:
        import psychopy
      Each Frame:
        ## xx = x + (d * cos(alpha))
        ## yy = y + (d * sin(alpha))

        dhg = DrawHexGrid([-200, 200])

        dhg.draw_top_left()
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent GlobalDefinitions
      Code Type = Py
      Before Experiment:
        point_dictionary = {
        'top_left': '[line_start[0], line_start[1] - self.edge_length]',
        'bottom_left': '[line_start[0] + self.edge_length * cos(120), line_start[1] - self.edge_length * sin(120)]',
        'bottom': '[line_start[0] + self.edge_length * cos(120), line_start[1] + self.edge_length * sin(120)]',
        'bottom_right': '[line_start[0], line_start[1] + self.edge_length]',
        'top_right': '[line_start[0] - self.edge_length * cos(120), line_start[1] + self.edge_length * sin(120)]',
        'top': '[line_start[0] - self.edge_length * cos(120), line_start[1] - self.edge_length * sin(120)]'
        }


        class DrawHexGrid:

            def __init__(self, top_left_origin, edge_length = 25, x_count = 6, y_count = 6):
                self.top_left_origin = top_left_origin
                self.edge_length = edge_length
                self. x_count = x_count
                self.y_count = y_count

            ## make this a general line drawer
            def draw_top_left(self):
                line_start = self.top_left_origin

                ## modify the iterable to make it general across all cases
                for position in point_dictionary:
                    line = self.define_line_type()
                    line.start = line_start
                    line.end = eval(point_dictionary[position])
                    line_start = line.end
                    line.draw()

            def define_line_type(self):
                return psychopy.visual.Line(
                    win = win,
                    units='pix',
                    lineColor=[-1, -1, -1]
                    )
  Routine trial2
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial1
